PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Priming_gender
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine training_block_female
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    TextComponent MAN_2
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = MAN
      units = norm
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    TextComponent WOMAN_2
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = WOMAN
      units = norm
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    TextboxComponent Fname
      bold = False
      editable = False
      font = Angsana New
      letterHeight = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Female
      units = norm
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    ImageComponent female_pic
      image = women.png
      pos = (-0.7, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent men_pic_2
      image = men.png
      pos = (0.7, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine priming_block
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    CodeComponent trial_init
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BEGIN EXPERIMENT ---
        import random
        from psychopy import core

        name_ids = {}
        next_id = 21
        # Try to load all names from the conditions file if available
        if 'Name' in thisExp.entries:
            unique_names = sorted(set(thisExp.entries['Name']))
        else:
            # fallback if CSV not yet loaded
            unique_names = []

        print("Initialized name trigger mapping (empty for now):", name_ids)


        # Path to your face images folder (relative to experiment folder)
        face_path = os.path.join(_thisDir, "facebank_clean")

        # General timers and codes
        trialClock = core.Clock()
        end_trial_code = 90

        # Stimulus state flags
        stimulus_name_started = False
        stimulus_pic_started = False
        trial_ended = False

        # Example trigger code dictionaries
        combo_ids = {"mm":71, "mf":72, "ff":73, "fm":74}

        # Dynamically generate face IDs from folder contents
        face_files = [f for f in os.listdir(face_path) if f.endswith(".png")]
        face_ids = {f: i+1 for i, f in enumerate(sorted(face_files))}

        # Optional debug print
        print("Loaded faces:", face_files)
        print("Setup complete — ready for trials.")
      Begin Routine:
        # --- BEGIN ROUTINE ---
        import random

        # Base duration
        base_name_dur = 0.25  # 250 ms
        jitter = 0.05          # ±50 ms

        # Randomize for this trial
        name_duration = base_name_dur + random.uniform(-jitter, jitter)
        print(f"Name duration for this trial: {name_duration:.3f}s")
        # --- Blank duration (after name) ---
        blank_duration = random.uniform(0.3, 0.5)  # 300–500 ms
        # Reset timers and flags
        trialClock.reset()
        stimulus_name_started = False
        stimulus_pic_started = False
        trial_ended = False

        # Set up this trial’s name and face from CSV
        current_name = Name
        current_face = Face
        name_gender = NameGender

        # Ensure name_ids has this name mapped
        if current_name not in name_ids:
            name_ids[current_name] = len(name_ids) + 21

        # Set text and image
        Priming_Name.text = current_name
        current_face_file = os.path.join(face_path, current_face)

        if os.path.exists(current_face_file):
            Priming_Face.setImage(current_face_file)
            print(f"Current trial: {current_name} ({name_gender}), {current_face}")
        else:
            print(f"ERROR: Image not found: {current_face_file}")

        # Hide both at start
        Priming_Name.setAutoDraw(False)
        Priming_Face.setAutoDraw(False)

        # Determine combination trigger (face_gender + name_gender)
        face_gender = "m" if "_m" in current_face else "f"
        combo_code = combo_ids[face_gender + name_gender]

        # --- Send combination trigger at trial start ---
        outlet.push_sample([combo_code])
        win.callOnFlip(print, "Trial/Combo Trigger sent:", combo_code)

        # --- Send name trigger immediately after ---
        NameTrig = name_ids.get(current_name, 0)
        outlet.push_sample([NameTrig])
        win.callOnFlip(print, "Name Trigger sent:", NameTrig)
      Each Frame:
        # --- EACH FRAME ---

        t = trialClock.getTime()

        # --- Name display with jitter ---
        if 0 <= t < name_duration:
            Priming_Name.setAutoDraw(True)
            Priming_Face.setAutoDraw(False)
            if not stimulus_name_started:
                stimulus_name_start_time = globalClock.getTime()
                stimulus_name_started = True
                print(f"Time {t:.3f}s: Name displayed")

        # --- Short blank after name (e.g., 100 ms) ---
        elif name_duration <= t < name_duration + blank_duration:
            Priming_Name.setAutoDraw(False)
            Priming_Face.setAutoDraw(False)

        # --- Face display until trial end ---
        elif t >= name_duration + blank_duration:
            Priming_Name.setAutoDraw(False)
            Priming_Face.setAutoDraw(True)
            if not stimulus_pic_started:
                stimulus_pic_started = True
                ImageTrig = face_ids[current_face]
                outlet.push_sample([ImageTrig])
                win.callOnFlip(print, "Face Trigger sent:", ImageTrig)
                print(f"Time {t:.3f}s: Face displayed")

        # Timeout requeue if no response after 3 s
        if t >= 3.0 and not response.keys and not trial_ended:
            outlet.push_sample([end_trial_code])
            win.callOnFlip(print, "End-of-Trial Trigger sent (timeout):", end_trial_code)
            print(f"Timeout! Trial ended (no response): {current_name}, {current_face}")
            trial_ended = True
            continueRoutine = False

        # End trial on response
        if response.keys and not trial_ended:
            outlet.push_sample([end_trial_code])
            win.callOnFlip(print, "End-of-Trial Trigger sent (response):", end_trial_code)
            print(f"Response detected at {t:.3f}s — trial ended")
            trial_ended = True
            continueRoutine = False
      End Routine:
        Priming_Name.setAutoDraw(False)
        Priming_Face.setAutoDraw(False)
    TextComponent MAN_3
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = MAN
      units = norm
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    TextComponent MAN_3_desc
      letterHeight = 0.06
      pos = (0.8, 0.7)
      startVal [time (s)] = 0.0
      text = Press the k key
      units = norm
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    TextComponent WOMAN_3
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text = WOMAN
      units = norm
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    TextComponent WOMAN_3_desc
      letterHeight = 0.06
      pos = (-0.8, 0.7)
      startVal [time (s)] = 0.0
      text = Press the j key
      units = norm
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    TextboxComponent Priming_Name
      bold = False
      editable = False
      font = Noto Sans Thai
      letterHeight = 0.3
      size = (1, 1)
      startVal [time (s)] = 0
      units = norm
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      text [set every repeat]:
        $current_name
    ImageComponent Priming_Face
      image [set every repeat] = $current_face_file
      pos = (0.0, 0.0)
      size = (1.2, 1.2)
      startVal [time (s)] = 0
      units = norm
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_block
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    TextComponent MAN
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = MAN
      units = norm
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    TextComponent WOMAN
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text = WOMAN
      units = norm
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent pic
      image [set every repeat] = $Image
      pos = (0.0, 0.0)
      size = (1.2, 1.2)
      startVal [time (s)] = 0.4
      units = norm
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent error_feedback
      fillColor = red
      lineColor = red
      ori = 45
      shape = cross
      size = (0.5, 0.5)
      units = norm
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    CodeComponent code
      Code Type = Py
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      Each Frame:
        ## Only show feedback if a key has been pressed
        #if key_resp.keys:  # keyResp is your Keyboard component
        #    # Determine the correct key based on the image
        #    if "men.png" in pic.image:  # imageStim is your Image component
        #        correctKey = 'k'
        #    elif "women.png" in pic.image:
        #        correctKey = 'j'
        #
        #    # Show cross if wrong
        #    if key_resp.keys[0] != correctKey:
        #        error_feedback.setAutoDraw(True)
        #    else:
        #        error_feedback.setAutoDraw(False)
  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = ignore
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine feedback_training
    RoutineSettingsComponent feedback_training
      stopVal [duration (s)] = 0.5
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    PolygonComponent errorCross
      fillColor = red
      lineColor = red
      ori = 45
      shape = cross
      size = (0.5, 0.5)
      units = norm
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    CodeComponent code_2
      Code Type = Py
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      Each Frame:
        # Only show feedback if a key has been pressed
        if key_resp.keys:  # keyResp is your Keyboard component
            # Determine the correct key based on the image
            if "men.png" in pic.image:  # imageStim is your Image component
                correctKey = 'j'
            elif "women.png" in pic.image:
                correctKey = 'k'

        # Show cross only if wrong
        if key_resp.keys != correctKey:

            errorCross.setAutoDraw(True)
        else:
            continueRoutine = False  # skip routine if correct
  Routine priming_instruction
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    ImageComponent instruction_slide_2
      draggable = True
      image = Instruction.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent instruction_continue_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_Instruction
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name = 'PsychoPy_LSL', type='Markers', channel_count=1, nominal_srate=0, channel_format='int32', source_id='psy_marker')
        outlet = StreamOutlet(info)
        #port = serial.Serial('COM4',115200)
        #
    ImageComponent instruction_slide
      draggable = True
      image = Instruction.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent instruction_continue
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ending
    RoutineSettingsComponent Ending
      stopVal [duration (s)] = 1
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    CodeComponent code_5
      Code Type = Auto->JS
      Begin Routine:
        #port.close()
Flow
  Routine training_Instruction
  LoopInitiator priming loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = permutations.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Face', 'face1_m.png'), ('Name', 'กฤษณะ'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'นเรศ'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ธนพล'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'อรรถพล'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ชัยวัฒน์'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ปริญญา'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ภูมิพัฒน์'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'วรพล'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ศักดิ์สิทธิ์'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'พิสิฐ'), ('NameGender', 'm')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'กาญจนา'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'พิมพ์ใจ'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'วาสนา'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'สุพัตรา'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'ศิริพร'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'อาภรณ์'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'จิตติมา'), ('NameGender', 'f')]),
      OrderedDict([('Face', 'face1_m.png'), ('Name', 'วรรณา'), ('NameGender', 'f')])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
    Routine priming_block
  LoopTerminator priming
  Routine Ending
